<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio" xmlns:q4="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
          <q1:ToggleTrigger>true</q1:ToggleTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-04-08\005\raw_video_data\_iblrig_leftCamera.raw.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>false</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-04-08\005\raw_video_data\_iblrig_leftCamera.timestamps.ssv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfBooleanBooleanProperty">
        <MemberName>Value</MemberName>
        <Name>SaveVideo</Name>
        <Value>true</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileName</MemberName>
        <Name>TimestampsFileName</Name>
        <Value>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-04-08\005\raw_video_data\_iblrig_leftCamera.timestamps.ssv</Value>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringVideoWriter">
        <MemberName>FileName</MemberName>
        <Name>VideoFileName</Name>
        <Value>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-04-08\005\raw_video_data\_iblrig_leftCamera.raw.avi</Value>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="q4:ReceiveMessage">
        <q4:Connection>bpod</q4:Connection>
        <q4:Address>/x</q4:Address>
        <q4:TypeTag>i</q4:TypeTag>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfBooleanBooleanProperty">
        <MemberName>Value</MemberName>
        <Name>RecordSound</Name>
        <Value>true</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:AudioWriter">
          <q5:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-04-08\005\raw_behavior_data\_iblrig_micData.raw.wav</q5:FileName>
          <q5:Suffix>None</q5:Suffix>
          <q5:Buffered>true</q5:Buffered>
          <q5:Overwrite>false</q5:Overwrite>
          <q5:SamplingFrequency>200000</q5:SamplingFrequency>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringAudioWriter">
        <MemberName>FileName</MemberName>
        <Name>FileNameMic</Name>
        <Value>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-04-08\005\raw_behavior_data\_iblrig_micData.raw.wav</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:AudioCapture">
          <q5:DeviceName>Microphone (UltraMic 200K 16 bi</q5:DeviceName>
          <q5:Frequency>200000</q5:Frequency>
          <q5:SampleFormat>Mono16</q5:SampleFormat>
          <q5:BufferLength>10</q5:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Grayscale" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>5</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>9</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>13</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>7</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>6</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>18</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>26</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>24</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Boolean, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Audio.AudioWriter, Bonsai.Audio, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Audio.AudioWriter, Bonsai.Audio, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Audio.AudioCapture, Bonsai.Audio, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>