<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Threshold">
          <q1:ThresholdValue>254</q1:ThresholdValue>
          <q1:MaxValue>255</q1:MaxValue>
          <q1:ThresholdType>Binary</q1:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ConvertColor">
          <q1:Conversion>Gray2Bgr</q1:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property name="Size" selector="Source.Size" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SolidColor">
          <q1:Size>
            <q1:Width>1280</q1:Width>
            <q1:Height>1024</q1:Height>
          </q1:Size>
          <q1:Depth>U8</q1:Depth>
          <q1:Channels>3</q1:Channels>
          <q1:Color>
            <q1:Val0>255</q1:Val0>
            <q1:Val1>255</q1:Val1>
            <q1:Val2>0</q1:Val2>
            <q1:Val3>0</q1:Val3>
          </q1:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Mask">
          <q1:FillValue>
            <q1:Val0>0</q1:Val0>
            <q1:Val1>0</q1:Val1>
            <q1:Val2>0</q1:Val2>
            <q1:Val3>0</q1:Val3>
          </q1:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadImage">
          <q1:FileName>fc2_save_2018-12-20-160436-0000.tif</q1:FileName>
          <q1:Mode>Grayscale</q1:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ImageHistogram" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Saturation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Threshold">
          <q1:ThresholdValue>150</q1:ThresholdValue>
          <q1:MaxValue>255</q1:MaxValue>
          <q1:ThresholdType>Binary</q1:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FlyCapture">
          <q2:Index>0</q2:Index>
          <q2:ColorProcessing>Default</q2:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Positioning</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="Add" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>4</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>9</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>14</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertColor, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.InputMappingBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.SolidColor, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Mask, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LoadImage, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageHistogram, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>