<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LeftCameraIndex" />
        <Property Name="FileNameLeft" />
        <Property Name="FileNameLeftData" />
        <Property Name="RightCameraIndex" />
        <Property Name="FileNameRight" />
        <Property Name="FileNameRightData" />
        <Property Name="BodyCameraIndex" />
        <Property Name="FileNameBody" />
        <Property Name="FileNameBodyData" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameLeft" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="LeftCameraIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>0</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.raw.avi</cv:FileName>
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>60</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\GetFrameData.bonsai" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameLeftData" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.frameData.bin</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>true</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="RightCameraIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>1</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Both</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameRight" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_rightCamera.raw.avi</cv:FileName>
                  <cv:Suffix>None</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>true</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>150</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Metadata</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\GetFrameData.bonsai" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameRightData" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_rightCamera.frameData.bin</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>true</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameBody" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="BodyCameraIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>2</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_bodyCamera.raw.avi</cv:FileName>
                  <cv:Suffix>None</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>true</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>30</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Metadata</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Extensions\GetFrameData.bonsai" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameBodyData" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_bodyCamera.frameData.bin</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>true</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source2" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="19" To="24" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="21" To="25" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>