<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ToggleTrigger>true</p1:ToggleTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="SaveVideo" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="TimestampsFileName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="VideoFileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.raw.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.timestamps.ssv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>toDouble</scr:Name>
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="FrameCounterFileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.frame_counter.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>toDouble</scr:Name>
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="GPIOFileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.GPIO.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:DeviceName>Microphone (UltraMic 200K 16 bi</al:DeviceName>
          <al:SampleRate>200000</al:SampleRate>
          <al:SampleFormat>Mono16</al:SampleFormat>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RecordSound" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="FileNameMic" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioWriter">
          <al:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_behavior_data\_iblrig_micData.raw.wav</al:FileName>
          <al:Suffix>None</al:Suffix>
          <al:Buffered>true</al:Buffered>
          <al:Overwrite>true</al:Overwrite>
          <al:SampleRate>200000</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/x</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
        <osc:Connection>bpod</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="12" Label="Source1" />
      <Edge From="0" To="15" Label="Source1" />
      <Edge From="0" To="20" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="11" Label="Source1" />
      <Edge From="4" To="10" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="26" Label="Source2" />
      <Edge From="8" To="14" Label="Source2" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="25" Label="Source1" />
      <Edge From="11" To="13" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="25" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="25" Label="Source3" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source4" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="31" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="33" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="34" To="36" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>