<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LeftCameraIndex" />
        <Property Name="FileNameLeft" />
        <Property Name="FileNameLeftData" />
        <Property Name="RightCameraIndex" />
        <Property Name="FileNameRight" />
        <Property Name="FileNameRightData" />
        <Property Name="BodyCameraIndex" />
        <Property Name="FileNameBody" />
        <Property Name="FileNameBodyData" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameLeft" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="LeftCameraIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>0</p1:Index>
                <p1:ColorProcessing>Default</p1:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameLeftData" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.FrameData.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>Timestamp,Value.Metadata.embeddedTimeStamp,Value.Metadata.embeddedFrameCounter,Value.Metadata.embeddedGPIOPinState</io:Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.raw.avi</cv:FileName>
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>150</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="RightCameraIndex" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="p1:FlyCapture">
                  <p1:Index>1</p1:Index>
                  <p1:ColorProcessing>Default</p1:ColorProcessing>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Timestamp" />
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameRightData" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
                <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_rightCamera.FrameData.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>true</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Value.Image</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:Flip">
                  <cv:Mode>Both</cv:Mode>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameRight" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_rightCamera.raw.avi</cv:FileName>
                  <cv:Suffix>None</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>true</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>150</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameBody" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="BodyCameraIndex" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="p1:FlyCapture">
                  <p1:Index>2</p1:Index>
                  <p1:ColorProcessing>Default</p1:ColorProcessing>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Timestamp" />
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameBodyData" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
                <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_bodyCamera.FrameData.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>true</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Value.Image</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:Flip">
                  <cv:Mode>Vertical</cv:Mode>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_bodyCamera.raw.avi</cv:FileName>
                  <cv:Suffix>None</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>true</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>30</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source2" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="17" To="25" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>