<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FlyCapture">
          <q2:Index>0</q2:Index>
          <q2:ToggleTrigger>true</q2:ToggleTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Threshold">
          <q1:ThresholdValue>254</q1:ThresholdValue>
          <q1:MaxValue>255</q1:MaxValue>
          <q1:ThresholdType>Binary</q1:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Size" Selector="Size" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SolidColor">
          <q1:Size>
            <q1:Width>1280</q1:Width>
            <q1:Height>1024</q1:Height>
          </q1:Size>
          <q1:Depth>U8</q1:Depth>
          <q1:Channels>3</q1:Channels>
          <q1:Color>
            <q1:Val0>255</q1:Val0>
            <q1:Val1>255</q1:Val1>
            <q1:Val2>0</q1:Val2>
            <q1:Val3>0</q1:Val3>
          </q1:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Mask">
          <q1:FillValue>
            <q1:Val0>0</q1:Val0>
            <q1:Val1>0</q1:Val1>
            <q1:Val2>0</q1:Val2>
            <q1:Val3>0</q1:Val3>
          </q1:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ConvertColor">
          <q1:Conversion>Gray2Bgr</q1:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Saturation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ImageHistogram" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadImage">
          <q1:FileName>rig_video_template.png</q1:FileName>
          <q1:Mode>Grayscale</q1:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Threshold">
          <q1:ThresholdValue>150</q1:ThresholdValue>
          <q1:MaxValue>255</q1:MaxValue>
          <q1:ThresholdType>BinaryInv</q1:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Positioning</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="11" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="7" Label="Source1" />
      <Edge From="1" To="10" Label="Source1" />
      <Edge From="1" To="13" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="5" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="8" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertColor, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageHistogram, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LoadImage, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Mask, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.SolidColor, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>