<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1-patch"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RecordSound" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="FileNameMic" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:DeviceName>Microphone (UltraMic 200K 16 bi</al:DeviceName>
          <al:SampleRate>200000</al:SampleRate>
          <al:SampleFormat>Mono16</al:SampleFormat>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioWriter">
          <al:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-07-01\005\raw_behavior_data\_iblrig_micData.raw.wav</al:FileName>
          <al:Suffix>None</al:Suffix>
          <al:Buffered>true</al:Buffered>
          <al:Overwrite>false</al:Overwrite>
          <al:SampleRate>200000</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Connection>bpod</osc:Connection>
        <osc:Address>/x</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>bpod</osc:Name>
          <osc:Port>7110</osc:Port>
          <osc:RemoteHostName>127.0.0.1</osc:RemoteHostName>
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="5" Label="Source2" />
      <Edge From="3" To="6" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="9" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>