<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q4="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>from_python</q1:Connection>
        <q1:Address>/d</q1:Address>
        <q1:TypeTag>i</q1:TypeTag>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Red</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Green</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Blue</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Data</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\range.bonsai">
        <MaxValue>1.01</MaxValue>
        <MinValue>0</MinValue>
        <NumSteps>100</NumSteps>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>R in RGB?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RGB</Name>
            </Expression>
            <Expression xsi:type="q2:PythonTransform">
              <q2:Script>@returns(bool)
def process(value):
  return 'R' in value</q2:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Red</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>G in RGB?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RGB</Name>
            </Expression>
            <Expression xsi:type="q2:PythonTransform">
              <q2:Script>@returns(bool)
def process(value):
  return 'G' in value</q2:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Green</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>B in RGB?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RGB</Name>
            </Expression>
            <Expression xsi:type="q2:PythonTransform">
              <q2:Script>@returns(bool)
def process(value):
  return 'B' in value</q2:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Blue</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>GreaterThanOrEqualTo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>1.0001</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:AspectRatio" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:UpdateUniform">
          <q3:UniformName>aspectRatio</q3:UniformName>
          <q3:ShaderName>sweep</q3:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:DrawMesh">
          <q3:ShaderName>sweep</q3:ShaderName>
          <q3:MeshName>FullScreenQuad</q3:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>UpdateUniforms</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Red</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>R in RGB?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RGB</Name>
                  </Expression>
                  <Expression xsi:type="q2:PythonTransform">
                    <q2:Script>@returns(bool)
def process(value):
  return 'R' in value</q2:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:UpdateUniform">
                <q3:UniformName>Red</q3:UniformName>
                <q3:ShaderName>sweep</q3:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Green</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>G in RGB?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RGB</Name>
                  </Expression>
                  <Expression xsi:type="q2:PythonTransform">
                    <q2:Script>@returns(bool)
def process(value):
  return 'G' in value</q2:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:UpdateUniform">
                <q3:UniformName>Green</q3:UniformName>
                <q3:ShaderName>sweep</q3:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Blue</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>B in RGB?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RGB</Name>
                  </Expression>
                  <Expression xsi:type="q2:PythonTransform">
                    <q2:Script>@returns(bool)
def process(value):
  return 'B' in value</q2:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:UpdateUniform">
                <q3:UniformName>Blue</q3:UniformName>
                <q3:ShaderName>sweep</q3:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Save" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>SaveData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="q4:CsvWriter">
              <q4:FileName>_iblrig_calibration_screen_brightness.raw.ssv</q4:FileName>
              <q4:Append>false</q4:Append>
              <q4:Overwrite>true</q4:Overwrite>
              <q4:Suffix>None</q4:Suffix>
              <q4:IncludeHeader>false</q4:IncludeHeader>
              <q4:CompatibilityMode>true</q4:CompatibilityMode>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Save" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RGB" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>RGB</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>RGB</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeRGBVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Red</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Green</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Blue</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="4" Label="Source2" />
      <Edge From="2" To="4" Label="Source3" />
      <Edge From="3" To="4" Label="Source4" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="14" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="6" To="11" Label="Source1" />
      <Edge From="6" To="13" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="21" To="23" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanOrEqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.AspectRatio, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>