<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q7="clr-namespace:Bonsai.Bpod;assembly=Bonsai.Bpod" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q4="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q6="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio" xmlns:q1="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="ExternalizedPropertyOfStringReceiveMessage">
        <MemberName>Connection</MemberName>
        <Name>Connection</Name>
        <Value>bpod</Value>
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>bpod</q1:Connection>
        <q1:Address>/p</q1:Address>
        <q1:TypeTag>i</q1:TypeTag>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>InitPosition</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:Rescale">
          <q3:Min>-180</q3:Min>
          <q3:Max>180</q3:Max>
          <q3:RangeMin>-1.333</q3:RangeMin>
          <q3:RangeMax>1.333</q3:RangeMax>
          <q3:RescaleType>Linear</q3:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>CLOSE LOOP</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="FloatProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:AspectRatio" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:WindowClosed" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>RawEncoderEvents</Name>
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>bpod</q1:Connection>
        <q1:Address>/g</q1:Address>
        <q1:TypeTag>f</q1:TypeTag>
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>bpod</q1:Connection>
        <q1:Address>/s</q1:Address>
        <q1:TypeTag>f</q1:TypeTag>
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>bpod</q1:Connection>
        <q1:Address>/a</q1:Address>
        <q1:TypeTag>f</q1:TypeTag>
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>bpod</q1:Connection>
        <q1:Address>/f</q1:Address>
        <q1:TypeTag>f</q1:TypeTag>
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>bpod</q1:Connection>
        <q1:Address>/c</q1:Address>
        <q1:TypeTag>f</q1:TypeTag>
      </Expression>
      <Expression xsi:type="q4:ExpressionTransform">
        <q4:Expression>single(it)</q4:Expression>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>STOP</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="FloatProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WindowWorkflow">
        <Name>ClosedLoopStimulus</Name>
        <Description>Add stop condition after combine latest:
If sum == 0 its in the middle this works fine 
but
If abs(curr_position) == abs(InitPosition):
    STOP
This will work in both directions!! its what we want</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>xc</q2:UniformName>
                <q2:ShaderName>Gabor</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>StopCondition</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowPropertyOfInt16">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="q4:ExpressionTransform">
              <q4:Expression>single(it)</q4:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Encoder</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>InitPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Rescale">
                <q3:Min>-180</q3:Min>
                <q3:Max>180</q3:Max>
                <q3:RangeMin>-1.333</q3:RangeMin>
                <q3:RangeMax>1.333</q3:RangeMax>
                <q3:RescaleType>Clamp</q3:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="q4:ExpressionTransform">
              <q4:Expression>((Item1+Item2) + 180) % 360 - 180</q4:Expression>
            </Expression>
            <Expression xsi:type="q4:ExpressionTransform">
              <q4:Expression>Math.Abs(int16(it))</q4:Expression>
            </Expression>
            <Expression xsi:type="q4:ExpressionTransform">
              <q4:Expression>Math.Abs(Int16(it))</q4:Expression>
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Gain</Name>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>PhotodiodeSquareUpdate</Name>
              <Description>Input: Tick
For every movement of the wheel pulses a square in the top right corner of the quad.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateUniform">
                      <q2:UniformName>frame_count</q2:UniformName>
                      <q2:ShaderName>Gabor</q2:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Accumulate" />
                  <Expression xsi:type="q4:ExpressionTransform">
                    <q4:Expression>Int16(it/it)</q4:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Sample" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.EventArgs.Time</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>3</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>GainConverter</Name>
              <Description>Inputs: RotaryEncoder, Gain
Multiplies deg from encoder to GainFactor given Gain for a particular Value of wheel radius
</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="NestedWorkflow">
                    <Name>GainFactor</Name>
                    <Description>Input: Gain
Computes the factor to be multiplied by the position output of the RE node.
Gain in deg/mm
mm_wheel_deg = wheel_perim / 360
wheel_perim = whell_radius * 2 * pi</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Multiply" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="CombineLatest" />
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="NestedWorkflow">
                          <Name>mm/Wheel_deg</Name>
                          <Description>out: wheel_perim / 360
Value = whhel_radius for wheel_perim</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Divide" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="Zip" />
                              </Expression>
                              <Expression xsi:type="NestedWorkflow">
                                <Name>WheelPerim</Name>
                                <Description>in: value = radius 
out: value* 2pi</Description>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="Multiply" />
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="Zip" />
                                    </Expression>
                                    <Expression xsi:type="Multiply">
                                      <Operand xsi:type="FloatProperty">
                                        <Value>2</Value>
                                      </Operand>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>31</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>3.14159274</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                    <Expression xsi:type="ExternalizedPropertyOfSingleFloatProperty">
                                      <MemberName>Value</MemberName>
                                      <Name>Value</Name>
                                      <Value>31</Value>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge>
                                      <From>0</From>
                                      <To>5</To>
                                      <Label>Source1</Label>
                                    </Edge>
                                    <Edge>
                                      <From>1</From>
                                      <To>0</To>
                                      <Label>Source1</Label>
                                    </Edge>
                                    <Edge>
                                      <From>2</From>
                                      <To>1</To>
                                      <Label>Source1</Label>
                                    </Edge>
                                    <Edge>
                                      <From>3</From>
                                      <To>1</To>
                                      <Label>Source2</Label>
                                    </Edge>
                                    <Edge>
                                      <From>4</From>
                                      <To>2</To>
                                      <Label>Source1</Label>
                                    </Edge>
                                    <Edge>
                                      <From>6</From>
                                      <To>3</To>
                                      <Label>Source1</Label>
                                    </Edge>
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="FloatProperty">
                                  <Value>360</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="ExternalizedPropertyOfSingleFloatProperty">
                                <MemberName>Value</MemberName>
                                <Name>Value</Name>
                                <Value>31</Value>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge>
                                <From>0</From>
                                <To>4</To>
                                <Label>Source1</Label>
                              </Edge>
                              <Edge>
                                <From>1</From>
                                <To>0</To>
                                <Label>Source1</Label>
                              </Edge>
                              <Edge>
                                <From>2</From>
                                <To>1</To>
                                <Label>Source1</Label>
                              </Edge>
                              <Edge>
                                <From>3</From>
                                <To>1</To>
                                <Label>Source2</Label>
                              </Edge>
                              <Edge>
                                <From>5</From>
                                <To>2</To>
                                <Label>Source1</Label>
                              </Edge>
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="ExternalizedPropertyOfSingleFloatProperty">
                          <MemberName>Value</MemberName>
                          <Name>Value</Name>
                          <Value>31</Value>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge>
                          <From>0</From>
                          <To>4</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>1</From>
                          <To>0</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>2</From>
                          <To>1</To>
                          <Label>Source1</Label>
                        </Edge>
                        <Edge>
                          <From>3</From>
                          <To>1</To>
                          <Label>Source2</Label>
                        </Edge>
                        <Edge>
                          <From>5</From>
                          <To>3</To>
                          <Label>Source1</Label>
                        </Edge>
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedPropertyOfSingleFloatProperty">
                    <MemberName>Value</MemberName>
                    <Name>Value</Name>
                    <Value>31</Value>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>1</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>0</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Contrast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:CreateVector2">
                <q2:X>0</q2:X>
                <q2:Y>0</q2:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>2</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>20</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>10</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>17</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>20</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>19</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>20</From>
              <To>19</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>SHOW STIM</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="FloatProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:UpdateUniform">
          <q2:UniformName>aspectRatio</q2:UniformName>
          <q2:ShaderName>Gabor</q2:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>SaveData</Name>
        <Description>Needs a Published Subject with the RE data stream

Saves Rotary Encoder position 
Saves Rotary Encoder timestamp
Saves Bonsai Timestamp
3 different files, as per ALF specification:
re.position.csv
re.timestamp.cv
re.pctimestamp.csv
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="q5:CsvWriter">
              <q5:FileName>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_encoderTrialInfo.bonsai_raw.ssv</q5:FileName>
              <q5:Append>false</q5:Append>
              <q5:Overwrite>false</q5:Overwrite>
              <q5:Suffix>None</q5:Suffix>
              <q5:IncludeHeader>false</q5:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimAngle</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Gain</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNum</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>InitPosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Contrast</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimFreq</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawEncoderEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="q5:CsvWriter">
              <q5:FileName>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_encoderEvents.bonsai_raw.ssv</q5:FileName>
              <q5:Append>false</q5:Append>
              <q5:Overwrite>false</q5:Overwrite>
              <q5:Suffix>None</q5:Suffix>
              <q5:IncludeHeader>false</q5:IncludeHeader>
            </Expression>
            <Expression xsi:type="q5:CsvWriter">
              <q5:FileName>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_encoderPositions.bonsai_raw.ssv</q5:FileName>
              <q5:Append>false</q5:Append>
              <q5:Overwrite>false</q5:Overwrite>
              <q5:Suffix>None</q5:Suffix>
              <q5:IncludeHeader>false</q5:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawEncoderPositions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
              <MemberName>FileName</MemberName>
              <Name>FileNameTrialInfo</Name>
              <Value>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_encoderTrialInfo.bonsai_raw.ssv</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
              <MemberName>FileName</MemberName>
              <Name>FileNameEvents</Name>
              <Value>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_encoderEvents.bonsai_raw.ssv</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
              <MemberName>FileName</MemberName>
              <Name>FileNamePositions</Name>
              <Value>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_encoderPositions.bonsai_raw.ssv</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q6:AudioWriter">
                <q6:FileName>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_rawMic.data.wav</q6:FileName>
                <q6:Suffix>None</q6:Suffix>
                <q6:Buffered>true</q6:Buffered>
                <q6:Overwrite>false</q6:Overwrite>
                <q6:SamplingFrequency>200000</q6:SamplingFrequency>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q6:AudioCapture">
                <q6:DeviceName>Microphone (UltraMic 200K 16 bi</q6:DeviceName>
                <q6:Frequency>200000</q6:Frequency>
                <q6:SampleFormat>Mono16</q6:SampleFormat>
                <q6:BufferLength>10</q6:BufferLength>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfStringAudioWriter">
              <MemberName>FileName</MemberName>
              <Name>FileNameMic</Name>
              <Value>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_rawMic.data.wav</Value>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>1</From>
              <To>3</To>
              <Label>Source5</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source6</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>3</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>3</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>3</To>
              <Label>Source7</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>0</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>11</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>12</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>20</From>
              <To>19</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>21</From>
              <To>19</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Gain</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:UpdateUniform">
          <q2:UniformName>patch_size</q2:UniformName>
          <q2:ShaderName>Gabor</q2:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:UpdateUniform">
          <q2:UniformName>gabor_angle</q2:UniformName>
          <q2:ShaderName>Gabor</q2:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:UpdateUniform">
          <q2:UniformName>gabor_freq</q2:UniformName>
          <q2:ShaderName>Gabor</q2:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>bpod</q1:Connection>
        <q1:Address>/t</q1:Address>
        <q1:TypeTag>i</q1:TypeTag>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Contrast</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:UpdateUniform">
          <q2:UniformName>xc</q2:UniformName>
          <q2:ShaderName>Gabor</q2:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>HideStimulus</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>xc</q2:UniformName>
                <q2:ShaderName>Gabor</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:CreateVector2">
                <q2:X>0</q2:X>
                <q2:Y>0</q2:Y>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Switch" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>UpdateInitPosition</Name>
        <Description>shoud set contrast of stim to trial contrast
probably there is no need to reset the position also
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Contrast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:CreateVector2">
                <q2:X>0</q2:X>
                <q2:Y>0</q2:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>xc</q2:UniformName>
                <q2:ShaderName>Gabor</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="q4:ExpressionTransform">
              <q4:Expression>single(it)</q4:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Rescale">
                <q3:Min>-180</q3:Min>
                <q3:Max>180</q3:Max>
                <q3:RangeMin>-1.333</q3:RangeMin>
                <q3:RangeMax>1.333</q3:RangeMax>
                <q3:RescaleType>Linear</q3:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>InitPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>2</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DrawMesh">
          <q2:ShaderName>Gabor</q2:ShaderName>
          <q2:MeshName>FullscreenQuad</q2:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Data</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Position</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:EncoderEvent" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:EncoderPosition" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q7:Encoder">
          <q7:PortName>COM3</q7:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="q4:ExpressionTransform">
        <q4:Expression>single(it)</q4:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TrialNum</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>StimFreq</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>StimAngle</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>StimSize</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>RawEncoderPositions</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:Rescale">
          <q3:Min>-512</q3:Min>
          <q3:Max>512</q3:Max>
          <q3:RangeMin>-180</q3:RangeMin>
          <q3:RangeMax>180</q3:RangeMax>
          <q3:RescaleType>Linear</q3:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileNameTrialInfo</MemberName>
        <Name>FileNameTrialInfo</Name>
        <Value>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_encoderTrialInfo.bonsai_raw.ssv</Value>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileNameEvents</MemberName>
        <Name>FileNameEvents</Name>
        <Value>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_encoderEvents.bonsai_raw.ssv</Value>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileNamePositions</MemberName>
        <Name>FileNamePositions</Name>
        <Value>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_encoderPositions.bonsai_raw.ssv</Value>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>bpod</q1:Connection>
        <q1:Address>/x</q1:Address>
        <q1:TypeTag>i</q1:TypeTag>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringEncoder">
        <MemberName>PortName</MemberName>
        <Name>REPortName</Name>
        <Value>COM3</Value>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringAudioWriter">
        <MemberName>FileNameMic</MemberName>
        <Name>FileNameMic</Name>
        <Value>C:\iblrig\Subjects\test_mouse\2018-09-14\19\raw_behavior_data\_ibl_rawMic.data.wav</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:CreateVector2">
          <q2:X>0</q2:X>
          <q2:Y>0</q2:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>49</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>54</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>33</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>54</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>29</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>30</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>32</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>42</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>41</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>40</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>26</From>
        <To>39</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>38</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>34</From>
        <To>44</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>35</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>36</From>
        <To>43</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>37</From>
        <To>35</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>37</From>
        <To>36</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>38</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>38</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>38</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>43</From>
        <To>34</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>44</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>45</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>46</From>
        <To>21</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>47</From>
        <To>21</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>49</From>
        <To>48</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>50</From>
        <To>49</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>51</From>
        <To>37</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>52</From>
        <To>21</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>53</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>54</From>
        <To>53</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Rescale, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.AspectRatio, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.WindowClosed, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.WorkflowProperty`1[[System.Int16, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Sample, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DivideBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateVector2, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Audio.AudioWriter, Bonsai.Audio, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Audio.AudioCapture, Bonsai.Audio, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Audio.AudioWriter, Bonsai.Audio, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Switch, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Bpod.EncoderEvent, Bonsai.Bpod, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Bpod.EncoderPosition, Bonsai.Bpod, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Bpod.Encoder, Bonsai.Bpod, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Bpod.Encoder, Bonsai.Bpod, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>