<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Bpod;assembly=Bonsai.Bpod" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q4="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q6="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>Stim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Connection" />
            </Expression>
            <Expression xsi:type="q1:ReceiveMessage">
              <q1:Connection>bpod</q1:Connection>
              <q1:Address>/p</q1:Address>
              <q1:TypeTag>i</q1:TypeTag>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>InitPosition</Name>
            </Expression>
            <Expression xsi:type="q1:ReceiveMessage">
              <q1:Connection>bpod</q1:Connection>
              <q1:Address>/c</q1:Address>
              <q1:TypeTag>f</q1:TypeTag>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Contrast</Name>
            </Expression>
            <Expression xsi:type="q1:ReceiveMessage">
              <q1:Connection>bpod</q1:Connection>
              <q1:Address>/t</q1:Address>
              <q1:TypeTag>i</q1:TypeTag>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TrialNum</Name>
            </Expression>
            <Expression xsi:type="q1:ReceiveMessage">
              <q1:Connection>bpod</q1:Connection>
              <q1:Address>/f</q1:Address>
              <q1:TypeTag>f</q1:TypeTag>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimFreq</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GaborFreq</Name>
            </Expression>
            <Expression xsi:type="q1:ReceiveMessage">
              <q1:Connection>bpod</q1:Connection>
              <q1:Address>/a</q1:Address>
              <q1:TypeTag>f</q1:TypeTag>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimAngle</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GaborAngle</Name>
            </Expression>
            <Expression xsi:type="q1:ReceiveMessage">
              <q1:Connection>bpod</q1:Connection>
              <q1:Address>/s</q1:Address>
              <q1:TypeTag>f</q1:TypeTag>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GaborSize</Name>
            </Expression>
            <Expression xsi:type="q1:ReceiveMessage">
              <q1:Connection>bpod</q1:Connection>
              <q1:Address>/g</q1:Address>
              <q1:TypeTag>f</q1:TypeTag>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Gain</Name>
            </Expression>
            <Expression xsi:type="q1:ReceiveMessage">
              <q1:Connection>bpod</q1:Connection>
              <q1:Address>/h</q1:Address>
              <q1:TypeTag>f</q1:TypeTag>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GaborPhase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:RenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:AspectRatio" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>aspectRatio</q2:UniformName>
                <q2:ShaderName>Gabor</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:DrawMesh">
                <q2:ShaderName>Gabor</q2:ShaderName>
                <q2:MeshName>FullscreenQuad</q2:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="REPortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Encoder">
                <q3:PortName>COM3</q3:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:EncoderEvent" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp,Data</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RawEncoderEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="q4:ExpressionTransform">
              <q4:Expression>single(it)</q4:Expression>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>StopStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>HideStimulus</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>1</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborContrast</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborColor</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>ShowStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="FloatProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>UpdateInitPosition</Name>
              <Description>shoud set contrast of stim to trial contrast
probably there is no need to reset the position also
</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InitPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:Rescale">
                      <q5:Min>-180</q5:Min>
                      <q5:Max>180</q5:Max>
                      <q5:RangeMin>-1.333</q5:RangeMin>
                      <q5:RangeMax>1.333</q5:RangeMax>
                      <q5:RescaleType>Linear</q5:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="q4:ExpressionTransform">
                    <q4:Expression>single(it)</q4:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborPosition</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>UpdateContrast</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Contrast</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>1</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborContrast</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborColor</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>ShowCenter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="FloatProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>UpdateZeroPosition</Name>
              <Description>shoud set contrast of stim to trial contrast
probably there is no need to reset the position also
</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:Rescale">
                      <q5:Min>-180</q5:Min>
                      <q5:Max>180</q5:Max>
                      <q5:RangeMin>-1.333</q5:RangeMin>
                      <q5:RangeMax>1.333</q5:RangeMax>
                      <q5:RescaleType>Linear</q5:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="q4:ExpressionTransform">
                    <q4:Expression>single(it)</q4:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborPosition</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborColor</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:WindowClosed" />
            </Expression>
            <Expression xsi:type="q1:ReceiveMessage">
              <q1:Connection>bpod</q1:Connection>
              <q1:Address>/x</q1:Address>
              <q1:TypeTag>i</q1:TypeTag>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileNameTrialInfo" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileNameEvents" />
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>SaveData</Name>
              <Description>Needs a Published Subject with the RE data stream
Saves Rotary Encoder events, positions and trial info from pybpod
Optionally saves ultrasonic microphone data.

3/4 different files, as per ALF specification:
_iblrig_encoderEvents.raw.ssv
_iblrig_encoderPositions.raw.ssv
_iblrig_encoderTrialInfo.raw.ssv
Optional:
_iblrig_micData.raw.wav
</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborAngle</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Gain</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNum</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InitPosition</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborContrast</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborFreq</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborPhase</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNameTrialInfo" />
                  </Expression>
                  <Expression xsi:type="q6:CsvWriter">
                    <q6:FileName>C:\iblrig_data\Subjects\test_mouse\2018-10-09\32\raw_behavior_data\_iblrig_encoderTrialInfo.raw.ssv</q6:FileName>
                    <q6:Append>false</q6:Append>
                    <q6:Overwrite>false</q6:Overwrite>
                    <q6:Suffix>None</q6:Suffix>
                    <q6:IncludeHeader>false</q6:IncludeHeader>
                    <q6:CompatibilityMode>true</q6:CompatibilityMode>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RawEncoderEvents</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNameEvents" />
                  </Expression>
                  <Expression xsi:type="q6:CsvWriter">
                    <q6:FileName>C:\iblrig_data\Subjects\test_mouse\2018-10-09\32\raw_behavior_data\_iblrig_encoderEvents.raw.ssv</q6:FileName>
                    <q6:Append>false</q6:Append>
                    <q6:Overwrite>false</q6:Overwrite>
                    <q6:Suffix>None</q6:Suffix>
                    <q6:IncludeHeader>false</q6:IncludeHeader>
                    <q6:CompatibilityMode>true</q6:CompatibilityMode>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="7" Label="Source5" />
                  <Edge From="1" To="7" Label="Source6" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="7" Label="Source2" />
                  <Edge From="4" To="7" Label="Source3" />
                  <Edge From="5" To="7" Label="Source4" />
                  <Edge From="6" To="7" Label="Source7" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>UniformUpdates</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborAngle</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateUniform">
                      <q2:UniformName>gabor_angle</q2:UniformName>
                      <q2:ShaderName>Gabor</q2:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborFreq</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateUniform">
                      <q2:UniformName>gabor_freq</q2:UniformName>
                      <q2:ShaderName>Gabor</q2:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateUniform">
                      <q2:UniformName>patch_size</q2:UniformName>
                      <q2:ShaderName>Gabor</q2:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborContrast</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateUniform">
                      <q2:UniformName>gabor_contrast</q2:UniformName>
                      <q2:ShaderName>Gabor</q2:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborColor</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Accumulate" />
                  <Expression xsi:type="q4:ExpressionTransform">
                    <q4:Expression>it%2</q4:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Sample" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateUniform">
                      <q2:UniformName>color</q2:UniformName>
                      <q2:ShaderName>Gabor</q2:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateUniform">
                      <q2:UniformName>locationX</q2:UniformName>
                      <q2:ShaderName>Gabor</q2:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborPhase</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateUniform">
                      <q2:UniformName>gabor_phase</q2:UniformName>
                      <q2:ShaderName>Gabor</q2:ShaderName>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="13" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="14" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborContrast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborColor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.19</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborFreq</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborPhase</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="sync_x" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.95</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SyncSquareX</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>sync_square_x</q2:UniformName>
                <q2:ShaderName>Gabor</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="sync_y" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.15</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SyncSquareY</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>sync_square_y</q2:UniformName>
                <q2:ShaderName>Gabor</q2:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="0" To="16" Label="Source1" />
            <Edge From="0" To="18" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="30" To="33" Label="Source1" />
            <Edge From="30" To="36" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="38" To="40" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="42" To="44" Label="Source1" />
            <Edge From="43" To="44" Label="Source2" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="66" To="67" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT1S</DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Bpod.Encoder, Bonsai.Bpod, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Bpod.EncoderEvent, Bonsai.Bpod, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Rescale, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Last, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Sample, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.AspectRatio, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.WindowClosed, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>