<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Bpod;assembly=Bonsai.Bpod"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="REPortName" />
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="REPortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Encoder">
          <p1:PortName>COM7</p1:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:EncoderEvent" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp,Data</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>RawEncoderEvents</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>single(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:SampleOnRenderFrame" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>BpodEvent</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:EncoderPosition" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp,Position</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>RawEncoderPositions</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>-512</dsp:Min>
          <dsp:Max>512</dsp:Max>
          <dsp:RangeMin>-180</dsp:RangeMin>
          <dsp:RangeMax>180</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:SampleOnRenderFrame" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LastFrame</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>LessThan35</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>35</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>GreaterThan-35</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>-35</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>LessThan-35</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>-35</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-70</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>GreaterThan35</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>35</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>70</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StimLocationX</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="10" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>