<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:p1="clr-namespace:Bonsai.Bpod;assembly=Bonsai.Bpod"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>Stim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Connection" />
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/p</osc:Address>
              <osc:TypeTag>i</osc:TypeTag>
              <osc:Connection>bpod</osc:Connection>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>InitPosition</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/c</osc:Address>
              <osc:TypeTag>f</osc:TypeTag>
              <osc:Connection>bpod</osc:Connection>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Contrast</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/t</osc:Address>
              <osc:TypeTag>i</osc:TypeTag>
              <osc:Connection>bpod</osc:Connection>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TrialNum</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/f</osc:Address>
              <osc:TypeTag>f</osc:TypeTag>
              <osc:Connection>bpod</osc:Connection>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimFreq</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GaborFreq</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/a</osc:Address>
              <osc:TypeTag>f</osc:TypeTag>
              <osc:Connection>bpod</osc:Connection>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimAngle</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GaborAngle</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/s</osc:Address>
              <osc:TypeTag>f</osc:TypeTag>
              <osc:Connection>bpod</osc:Connection>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GaborSize</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/g</osc:Address>
              <osc:TypeTag>f</osc:TypeTag>
              <osc:Connection>bpod</osc:Connection>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Gain</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/h</osc:Address>
              <osc:TypeTag>f</osc:TypeTag>
              <osc:Connection>bpod</osc:Connection>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>GaborPhase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:AspectRatio" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>aspectRatio</gl:UniformName>
                <gl:ShaderName>Gabor</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DrawMesh">
                <gl:ShaderName>Gabor</gl:ShaderName>
                <gl:MeshName>FullscreenQuad</gl:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="REPortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Encoder">
                <p1:PortName>COM7</p1:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EncoderEvent" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp,Data</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RawEncoderEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>single(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>StopStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>HideStimulus</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborContrast</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborColor</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>ShowStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="FloatProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>UpdateInitPosition</Name>
              <Description>shoud set contrast of stim to trial contrast
probably there is no need to reset the position also
</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InitPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>-180</dsp:Min>
                      <dsp:Max>180</dsp:Max>
                      <dsp:RangeMin>-1.333</dsp:RangeMin>
                      <dsp:RangeMax>1.333</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborPosition</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>UpdateContrast</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Contrast</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborContrast</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborColor</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>ShowCenter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="FloatProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>UpdateZeroPosition</Name>
              <Description>shoud set contrast of stim to trial contrast
probably there is no need to reset the position also
</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>-180</dsp:Min>
                      <dsp:Max>180</dsp:Max>
                      <dsp:RangeMin>-1.333</dsp:RangeMin>
                      <dsp:RangeMax>1.333</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborPosition</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>GaborColor</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:WindowClosed" />
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/x</osc:Address>
              <osc:TypeTag>i</osc:TypeTag>
              <osc:Connection>bpod</osc:Connection>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileNameTrialInfo" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileNameEvents" />
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>SaveData</Name>
              <Description>Needs a Published Subject with the RE data stream
Saves Rotary Encoder events, positions and trial info from pybpod
Optionally saves ultrasonic microphone data.

3/4 different files, as per ALF specification:
_iblrig_encoderEvents.raw.ssv
_iblrig_encoderPositions.raw.ssv
_iblrig_encoderTrialInfo.raw.ssv
Optional:
_iblrig_micData.raw.wav
</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborAngle</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Gain</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNum</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InitPosition</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborContrast</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborFreq</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborPhase</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNameTrialInfo" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_behavior_data\_iblrig_encoderTrialInfo.raw.ssv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                    <io:CompatibilityMode>true</io:CompatibilityMode>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RawEncoderEvents</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNameEvents" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_behavior_data\_iblrig_encoderEvents.raw.ssv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                    <io:CompatibilityMode>true</io:CompatibilityMode>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="7" Label="Source5" />
                  <Edge From="1" To="7" Label="Source6" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="7" Label="Source2" />
                  <Edge From="4" To="7" Label="Source3" />
                  <Edge From="5" To="7" Label="Source4" />
                  <Edge From="6" To="7" Label="Source7" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>UniformUpdates</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborAngle</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>gabor_angle</gl:UniformName>
                      <gl:ShaderName>Gabor</gl:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborFreq</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>gabor_freq</gl:UniformName>
                      <gl:ShaderName>Gabor</gl:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>patch_size</gl:UniformName>
                      <gl:ShaderName>Gabor</gl:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborContrast</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>gabor_contrast</gl:UniformName>
                      <gl:ShaderName>Gabor</gl:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborColor</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it%2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>color</gl:UniformName>
                      <gl:ShaderName>Gabor</gl:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>locationX</gl:UniformName>
                      <gl:ShaderName>Gabor</gl:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GaborPhase</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>gabor_phase</gl:UniformName>
                      <gl:ShaderName>Gabor</gl:ShaderName>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="13" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="14" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborContrast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborColor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.19</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborFreq</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborPhase</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="sync_x" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.95</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SyncSquareX</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>sync_square_x</gl:UniformName>
                <gl:ShaderName>Gabor</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="sync_y" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.15</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SyncSquareY</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>sync_square_y</gl:UniformName>
                <gl:ShaderName>Gabor</gl:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="0" To="16" Label="Source1" />
            <Edge From="0" To="18" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="30" To="33" Label="Source1" />
            <Edge From="30" To="36" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="38" To="40" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="42" To="44" Label="Source1" />
            <Edge From="43" To="44" Label="Source2" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="66" To="67" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>