<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimSize</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VisualSpan</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Max" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>102.68038349181981</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>1</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Radius" />
          <Property Name="Aperture" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimFreq</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SpatialFrequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VisualSpan</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ExtentX" />
          <Property Name="ExtentY" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimLocationX</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimContrast</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Contrast" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LastStim</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimPhase</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Phase" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>35</LocationX>
        <LocationY>0</LocationY>
        <Angle>0</Angle>
        <SpatialFrequency>0.1</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <Phase>0</Phase>
        <SquareWave>false</SquareWave>
        <Contrast>0</Contrast>
        <Radius>0.477208972</Radius>
        <Aperture>0.477208972</Aperture>
        <Opacity>1</Opacity>
        <ExtentX>102.680382</ExtentX>
        <ExtentY>102.680382</ExtentY>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="StimFileName" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>Extensions\stims.csv</io:FileName>
        <io:ListSeparator />
        <io:ScanPattern>%i %f %f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT0S</gl:DueTime>
          <gl:Period>PT1S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it % 3</scr:Expression>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>NextStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StimContrast</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>InterStimInterval</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item1</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StimLocationX</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item2</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StimContrast</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item3</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StimPhase</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>LastStim</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimContrast</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it % 2</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SyncState</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="17" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="17" Label="Source4" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="17" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="17" Label="Source3" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="17" Label="Source5" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="17" Label="Source6" />
      <Edge From="14" To="18" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source7" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="27" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="26" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="27" To="30" Label="Source1" />
      <Edge From="27" To="32" Label="Source1" />
      <Edge From="27" To="34" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>