<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:q1="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>UpdateSyncSquare</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it % 2</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SyncState</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <RangeMin>-90</RangeMin>
        <RangeMax>225</RangeMax>
        <Count>8</Count>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>20</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DegreeToRadian" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>GratingSeries</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullFieldGrating</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VisualSpan</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>StimulusFrequency</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0.05</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SpatialFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="EnsureFullScreen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" />
                      <Property Name="ExtentY" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Angle" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="StimulusDuration" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Period" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                      <gl:Period>PT1S</gl:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="LessThan">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>double(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>UpdateSyncSquare</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Opacity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Angle>0</Angle>
                    <SpatialFrequency>0.05</SpatialFrequency>
                    <TemporalFrequency>2</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <Radius>10</Radius>
                    <Aperture>20</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>308.041138</ExtentX>
                    <ExtentY>308.041138</ExtentY>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="18" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="18" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="18" Label="Source3" />
                  <Edge From="9" To="18" Label="Source5" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="19" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source4" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:SampleOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>