<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileNameData" />
        <Property Name="FileNameDataLengths" />
        <Property Name="FileName" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileNameData" />
              <Property Name="FileNameDataLengths" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="Mod">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                      <Property Name="ColorA" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>1</ExtentX>
                    <ExtentY>1</ExtentY>
                    <LocationX>1.33</LocationX>
                    <LocationY>-1.03</LocationY>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:WindowClosed" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNameData" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\bonsai_ts_data.csv</io:FileName>
                    <io:Append>true</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" DisplayName="FileNameDataLengths" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\bonsai_ts_data_length.csv</io:FileName>
                    <io:Append>true</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="16" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="12" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="17" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <p1:PortName>COM5</p1:PortName>
                <p1:DeviceState>Active</p1:DeviceState>
                <p1:DumpRegisters>true</p1:DumpRegisters>
                <p1:LedState>On</p1:LedState>
                <p1:VisualIndicators>On</p1:VisualIndicators>
                <p1:Heartbeat>Disable</p1:Heartbeat>
                <p1:IgnoreErrors>false</p1:IgnoreErrors>
              </Combinator>
            </Expression>
            <Expression xsi:type="p2:BehaviorEvent">
              <p2:Type>RegisterAnalogInput</p2:Type>
              <p2:Mask>Port0</p2:Mask>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\harp_data.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="p2:BehaviorEvent">
              <p2:Type>AnalogInput</p2:Type>
              <p2:Mask>Port0</p2:Mask>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:LastOrDefault" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>