<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateWindow">
          <q1:Width>640</q1:Width>
          <q1:Height>480</q1:Height>
          <q1:VSync>On</q1:VSync>
          <q1:SwapSync>false</q1:SwapSync>
          <q1:ClearColor>Gray</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:CursorVisible>true</q1:CursorVisible>
          <q1:Location xsi:nil="true" />
          <q1:WindowBorder>Resizable</q1:WindowBorder>
          <q1:WindowState>Fullscreen</q1:WindowState>
          <q1:DisplayDevice>Second</q1:DisplayDevice>
          <q1:TargetRenderFrequency>60</q1:TargetRenderFrequency>
          <q1:RenderState />
          <q1:GraphicsMode>
            <q1:ColorFormat>
              <q1:Red>8</q1:Red>
              <q1:Green>8</q1:Green>
              <q1:Blue>8</q1:Blue>
              <q1:Alpha>8</q1:Alpha>
            </q1:ColorFormat>
            <q1:Depth>16</q1:Depth>
            <q1:Stencil>0</q1:Stencil>
            <q1:Samples>0</q1:Samples>
            <q1:AccumulatorFormat>
              <q1:Red>0</q1:Red>
              <q1:Green>0</q1:Green>
              <q1:Blue>0</q1:Blue>
              <q1:Alpha>0</q1:Alpha>
            </q1:AccumulatorFormat>
            <q1:Buffers>2</q1:Buffers>
            <q1:Stereo>false</q1:Stereo>
          </q1:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedViewport.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>DrawSyncSquare</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>UpdateSyncSquare</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawSyncSquare</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>UpdateSyncSquare</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SampleOnRenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Accumulate" />
      <Expression xsi:type="q2:ExpressionTransform">
        <q2:Expression>it % 2</q2:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" />
          <Property Name="ColorG" />
          <Property Name="ColorB" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>0.2</ExtentX>
        <ExtentY>0.2</ExtentY>
        <LocationX>1.23333335</LocationX>
        <LocationY>-1</LocationY>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SampleOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="Accumulate" />
      <Expression xsi:type="q3:CsvReader">
        <q3:FileName>times.txt</q3:FileName>
        <q3:ListSeparator />
        <q3:ScanPattern>%i</q3:ScanPattern>
        <q3:SkipRows>0</q3:SkipRows>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>UpdateSyncSquare</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SampleOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>120</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2104</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>UpdateSyncSquare</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2100</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="18" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="19" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source3" />
      <Edge From="18" To="33" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="28" Label="Source1" />
      <Edge From="21" To="32" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="34" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvReader, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateWindow, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.LoadResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.SampleOnRenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.SampleOnUpdateFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>