<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q4="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q6="clr-namespace:;assembly=Extensions" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateWindow">
          <q1:Width>640</q1:Width>
          <q1:Height>480</q1:Height>
          <q1:VSync>On</q1:VSync>
          <q1:SwapSync>false</q1:SwapSync>
          <q1:ClearColor>Gray</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:CursorVisible>true</q1:CursorVisible>
          <q1:Location xsi:nil="true" />
          <q1:WindowBorder>Resizable</q1:WindowBorder>
          <q1:WindowState>Fullscreen</q1:WindowState>
          <q1:DisplayDevice>Second</q1:DisplayDevice>
          <q1:TargetRenderFrequency>60</q1:TargetRenderFrequency>
          <q1:RenderState />
          <q1:GraphicsMode>
            <q1:ColorFormat>
              <q1:Red>8</q1:Red>
              <q1:Green>8</q1:Green>
              <q1:Blue>8</q1:Blue>
              <q1:Alpha>8</q1:Alpha>
            </q1:ColorFormat>
            <q1:Depth>16</q1:Depth>
            <q1:Stencil>0</q1:Stencil>
            <q1:Samples>0</q1:Samples>
            <q1:AccumulatorFormat>
              <q1:Red>0</q1:Red>
              <q1:Green>0</q1:Green>
              <q1:Blue>0</q1:Blue>
              <q1:Alpha>0</q1:Alpha>
            </q1:AccumulatorFormat>
            <q1:Buffers>2</q1:Buffers>
            <q1:Stereo>false</q1:Stereo>
          </q1:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.PrimitiveResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:TextureResources">
          <q1:Textures>
            <q1:TextureConfiguration xsi:type="q1:Texture2D">
              <q1:Name>DynamicTexture</q1:Name>
              <q1:Width xsi:nil="true" />
              <q1:Height xsi:nil="true" />
              <q1:InternalFormat>Rgba</q1:InternalFormat>
              <q1:WrapS>Repeat</q1:WrapS>
              <q1:WrapT>Repeat</q1:WrapT>
              <q1:MinFilter>Nearest</q1:MinFilter>
              <q1:MagFilter>Nearest</q1:MagFilter>
            </q1:TextureConfiguration>
          </q1:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TranslationY</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TranslationX</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TranslationZ</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="X" Selector="Item1" />
          <Property Name="Y" Selector="Item2" />
          <Property Name="Z" Selector="Item3" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:CreatePoint3d">
          <q2:X>0</q2:X>
          <q2:Y>0</q2:Y>
          <q2:Z>-8</q2:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Translation" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ScreenWidth</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Width" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ScreenHight</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Height" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewingWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-8</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedViewport.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>DrawSyncSquare</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:CreateRandom">
          <q3:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="AsyncSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SyncSquare</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawSyncSquare</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>UpdateSyncSquare</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Accumulate" />
            <Expression xsi:type="q4:ExpressionTransform">
              <q4:Expression>it % 2</q4:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.2</ExtentX>
              <ExtentY>0.2</ExtentY>
              <LocationX>1.4</LocationX>
              <LocationY>-1.1</LocationY>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TranslationZ" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeInputs</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TranslationX</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TranslationY</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TranslationZ" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TranslationZ</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ScreenWidth</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>15</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ScreenHight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TranslationZ</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Abs" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScreenWidth</Name>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="FloatProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="FloatProperty">
                <Value>8</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Atan" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:RadianToDegree" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>VisualSpan</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimFreq</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>7</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Pow">
                <q5:Power>2</q5:Power>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimContrast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimLocationX</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>UpdateSyncSquare</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileNameRFMapStim" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VisualNoiseStimuli</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DegreesVisualAngle" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Rows" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>15</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>15</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>8</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <Angle>0</Angle>
              <TextureName>DynamicTexture</TextureName>
              <ExtentX>120</ExtentX>
              <ExtentY>120</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="GridSize" Selector="it,it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SparseNoise</Name>
              <Description>Generates and draws a non-overlapping discrete sparse grid of randomly activated quads.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>GridSize</Name>
                    <Description>The size of the sparse noise grid.</Description>
                    <Category />
                  </Expression>
                  <Expression xsi:type="PropertySourceOfConvertFromArraySize">
                    <MemberName>Size</MemberName>
                    <Value>
                      <Width>15</Width>
                      <Height>15</Height>
                    </Value>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Size" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertySourceOfConvertFromArraySize">
                    <MemberName>Size</MemberName>
                    <Value>
                      <Width>15</Width>
                      <Height>15</Height>
                    </Value>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Rows" Selector="Height" />
                      <Property Name="Columns" Selector="Width" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateFrame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeStep.ElapsedTime</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Duration" />
                    <Property Name="Rate" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q6:SparseNoiseGenerator">
                      <q6:Rows>15</q6:Rows>
                      <q6:Columns>15</q6:Columns>
                      <q6:Duration>0.2</q6:Duration>
                      <q6:Rate>0.1</q6:Rate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:ConvertFromArray">
                      <q5:Size>
                        <q5:Width>15</q5:Width>
                        <q5:Height>15</q5:Height>
                      </q5:Size>
                      <q5:Depth xsi:nil="true" />
                      <q5:Channels xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="10" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:ConvertToImage" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateTexture">
                <q1:TextureName>DynamicTexture</q1:TextureName>
                <q1:TextureTarget>Texture2D</q1:TextureTarget>
                <q1:InternalFormat>Rgba</q1:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameRFMapStim" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:MatrixWriter">
                <q5:Path>NoiseLocations.bin</q5:Path>
                <q5:Suffix>None</q5:Suffix>
                <q5:Overwrite>true</q5:Overwrite>
                <q5:Layout>RowMajor</q5:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:Difference">
                <q5:Order>1</q5:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>UpdateSyncSquare</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="17" Label="Source1" />
            <Edge From="12" To="18" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" DisplayName="MappingTime" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT10M</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SampleOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="20" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="19" Label="Source1" />
      <Edge From="8" To="11" Label="Source2" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="19" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="19" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source4" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="32" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Dsp.ConvertFromArray, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Difference, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.MatrixWriter, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Pow, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AsyncSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DivideBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IndexBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.NotEqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.PropertySource`2[[Bonsai.Dsp.ConvertFromArray, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null],[OpenCV.Net.Size, OpenCV.Net, Version=3.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Abs, Bonsai.Numerics, Version=0.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Atan, Bonsai.Numerics, Version=0.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.CreateRandom, Bonsai.Numerics, Version=0.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.RadianToDegree, Bonsai.Numerics, Version=0.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateWindow, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.LoadResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.SampleOnUpdateFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.TextureResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertToImage, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CreatePoint3d, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>SparseNoiseGenerator, Extensions, Version=0.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>