<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q4="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateWindow">
          <q1:Width>640</q1:Width>
          <q1:Height>480</q1:Height>
          <q1:VSync>Off</q1:VSync>
          <q1:SwapSync>false</q1:SwapSync>
          <q1:ClearColor>Gray</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:CursorVisible>true</q1:CursorVisible>
          <q1:Location xsi:nil="true" />
          <q1:WindowBorder>Resizable</q1:WindowBorder>
          <q1:WindowState>Fullscreen</q1:WindowState>
          <q1:DisplayDevice>Second</q1:DisplayDevice>
          <q1:TargetRenderFrequency>0</q1:TargetRenderFrequency>
          <q1:RenderState />
          <q1:GraphicsMode>
            <q1:ColorFormat>
              <q1:Red>8</q1:Red>
              <q1:Green>8</q1:Green>
              <q1:Blue>8</q1:Blue>
              <q1:Alpha>8</q1:Alpha>
            </q1:ColorFormat>
            <q1:Depth>16</q1:Depth>
            <q1:Stencil>0</q1:Stencil>
            <q1:Samples>0</q1:Samples>
            <q1:AccumulatorFormat>
              <q1:Red>0</q1:Red>
              <q1:Green>0</q1:Green>
              <q1:Blue>0</q1:Blue>
              <q1:Alpha>0</q1:Alpha>
            </q1:AccumulatorFormat>
            <q1:Buffers>2</q1:Buffers>
            <q1:Stereo>false</q1:Stereo>
          </q1:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:TextureResources">
          <q1:Textures>
            <q1:TextureConfiguration xsi:type="q1:Texture2D">
              <q1:Name>DynamicTexture</q1:Name>
              <q1:Width xsi:nil="true" />
              <q1:Height xsi:nil="true" />
              <q1:InternalFormat>Rgba</q1:InternalFormat>
              <q1:WrapS>Repeat</q1:WrapS>
              <q1:WrapT>Repeat</q1:WrapT>
              <q1:MinFilter>Nearest</q1:MinFilter>
              <q1:MagFilter>Nearest</q1:MagFilter>
            </q1:TextureConfiguration>
          </q1:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TranslationY</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TranslationX</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TranslationZ</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="X" Selector="Item1" />
          <Property Name="Y" Selector="Item2" />
          <Property Name="Z" Selector="Item3" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:CreatePoint3d">
          <q2:X>0</q2:X>
          <q2:Y>0</q2:Y>
          <q2:Z>-8</q2:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Translation" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ScreenWidth</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ScreenHight</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Width" Selector="Item1" />
          <Property Name="Height" Selector="Item2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewingWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-8</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedViewport.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>DrawSyncSquare</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TranslationZ" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeInputs</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TranslationX</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TranslationY</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TranslationZ" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TranslationZ</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ScreenWidth</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>15</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ScreenHight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TranslationZ</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Abs" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScreenWidth</Name>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="FloatProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="FloatProperty">
                <Value>8</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Atan" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:RadianToDegree" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>VisualSpan</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimFreq</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>7</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:Pow">
                <q4:Power>2</q4:Power>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimContrast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimLocationX</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>UpdateSyncSquare</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SyncSquare</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawSyncSquare</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>UpdateSyncSquare</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Accumulate" />
            <Expression xsi:type="q5:ExpressionTransform">
              <q5:Expression>it % 2</q5:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.2</ExtentX>
              <ExtentY>0.2</ExtentY>
              <LocationX>1.23333335</LocationX>
              <LocationY>-0.9</LocationY>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FlickeringCheckerBoard</Name>
        <Description>CheckBoard</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DegreesVisualAngle" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>25</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Rows" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>15</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="NumberColumns" />
                <Property Name="NumberRows" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>15</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>25</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" DisplayName="StimulusPeriod" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timer">
                <DueTime>PT0S</DueTime>
                <Period>PT1S</Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowPropertyOfInt64">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Phase" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
              <NumberColumns>15</NumberColumns>
              <NumberRows>15</NumberRows>
              <Phase>1</Phase>
              <ExtentX>375</ExtentX>
              <ExtentY>375</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Angle>0</Angle>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MulticastSubject">
              <Name>UpdateSyncSquare</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="15" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="9" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="15" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="15" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="17" Label="Source1" />
            <Edge From="14" To="15" Label="Source4" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT3M</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="20" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="19" Label="Source1" />
      <Edge From="8" To="11" Label="Source2" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="19" Label="Source2" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source3" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Dsp.Pow, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DivideBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ModBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.WorkflowProperty`1[[System.Int64, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Abs, Bonsai.Numerics, Version=0.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Atan, Bonsai.Numerics, Version=0.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.RadianToDegree, Bonsai.Numerics, Version=0.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateWindow, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.LoadResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.TextureResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CreatePoint3d, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>