<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1-patch"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:q1="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:q2="clr-namespace:Bonsai.Bpod;assembly=Bonsai.Bpod"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>Stim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="TranslationZ" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>InitializeInputs</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>BpodOverrides</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>re_stop_stim</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="wie:KeyDown">
                                  <wie:Filter>D1</wie:Filter>
                                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>BpodEvent</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>re_show_stim</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="wie:KeyDown">
                                  <wie:Filter>D2</wie:Filter>
                                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>2</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>BpodEvent</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>re_close_loop</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="wie:KeyDown">
                                  <wie:Filter>D3</wie:Filter>
                                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>3</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>BpodEvent</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>re_spontaneous_start</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="wie:KeyDown">
                                  <wie:Filter>D4</wie:Filter>
                                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>4</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>BpodEvent</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>re_rfm_start</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="wie:KeyDown">
                                  <wie:Filter>D5</wie:Filter>
                                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>5</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>BpodEvent</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>re_replay_start</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="wie:KeyDown">
                                  <wie:Filter>D6</wie:Filter>
                                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>6</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>BpodEvent</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TranslationZ" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>PhysicalEnvironment</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>TranslationX</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>TranslationY</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="TranslationZ" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>-7</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>TranslationZ</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>20</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>ScreenWidth</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>15</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>ScreenHight</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TranslationZ</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q1:Abs" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ScreenWidth</Name>
                        </Expression>
                        <Expression xsi:type="Divide">
                          <Operand xsi:type="FloatProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Divide">
                          <Operand xsi:type="FloatProperty">
                            <Value>7</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q1:Atan" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q1:RadianToDegree" />
                        </Expression>
                        <Expression xsi:type="Multiply">
                          <Operand xsi:type="DoubleProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>VisualSpan</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="16" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>7</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Pow">
                      <dsp:Power>2</dsp:Power>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>-35</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>InitPosition</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>TrialNum</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>StimFreq</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>StimAngle</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>4</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Gain</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>StimPhase</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>SyncState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>UpdateSyncSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>StimContrast</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>StimLocationX</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:CreateRandom">
                      <q1:Seed>42</q1:Seed>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="AsyncSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>BpodEvent</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="sync_x" />
              <Property Name="sync_y" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BonVisionInit</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateWindow">
                      <gl:Width>640</gl:Width>
                      <gl:Height>480</gl:Height>
                      <gl:VSync>On</gl:VSync>
                      <gl:SwapSync>false</gl:SwapSync>
                      <gl:ClearColor>Gray</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:CursorVisible>true</gl:CursorVisible>
                      <gl:Location xsi:nil="true" />
                      <gl:WindowBorder>Resizable</gl:WindowBorder>
                      <gl:WindowState>Fullscreen</gl:WindowState>
                      <gl:DisplayDevice>Second</gl:DisplayDevice>
                      <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                      <gl:RenderState />
                      <gl:GraphicsMode>
                        <gl:ColorFormat>
                          <gl:Red>8</gl:Red>
                          <gl:Green>8</gl:Green>
                          <gl:Blue>8</gl:Blue>
                          <gl:Alpha>8</gl:Alpha>
                        </gl:ColorFormat>
                        <gl:Depth>16</gl:Depth>
                        <gl:Stencil>0</gl:Stencil>
                        <gl:Samples>0</gl:Samples>
                        <gl:AccumulatorFormat>
                          <gl:Red>0</gl:Red>
                          <gl:Green>0</gl:Green>
                          <gl:Blue>0</gl:Blue>
                          <gl:Alpha>0</gl:Alpha>
                        </gl:AccumulatorFormat>
                        <gl:Buffers>2</gl:Buffers>
                        <gl:Stereo>false</gl:Stereo>
                      </gl:GraphicsMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:TextureResources">
                      <gl:Textures>
                        <gl:TextureConfiguration xsi:type="gl:Texture2D">
                          <gl:Name>DynamicTexture</gl:Name>
                          <gl:Width xsi:nil="true" />
                          <gl:Height xsi:nil="true" />
                          <gl:InternalFormat>Rgba</gl:InternalFormat>
                          <gl:WrapS>Repeat</gl:WrapS>
                          <gl:WrapT>Repeat</gl:WrapT>
                          <gl:MinFilter>Nearest</gl:MinFilter>
                          <gl:MagFilter>Nearest</gl:MagFilter>
                        </gl:TextureConfiguration>
                      </gl:Textures>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="res:LoadResources" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
                    <Left>-180</Left>
                    <Right>180</Right>
                    <Bottom>-90</Bottom>
                    <Top>90</Top>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
                    <FaceSize xsi:nil="true" />
                    <ClearColor>Gray</ClearColor>
                    <Width xsi:nil="true" />
                    <Height xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TranslationY</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TranslationX</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TranslationZ</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item1" />
                      <Property Name="Y" Selector="Item2" />
                      <Property Name="Z" Selector="Item3" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint3d">
                      <cv:X>0</cv:X>
                      <cv:Y>0</cv:Y>
                      <cv:Z>-7</cv:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Translation" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScreenWidth</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScreenHight</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Width" Selector="Item1" />
                      <Property Name="Height" Selector="Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewingWindow.bonsai">
                    <Width>20</Width>
                    <Height>15</Height>
                    <Rotation>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Rotation>
                    <Translation>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>-7</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="sync_x" />
                    <Property Name="sync_y" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SyncSquare</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SyncState</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="ColorR" />
                            <Property Name="ColorG" />
                            <Property Name="ColorB" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedViewport.bonsai" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="sync_x" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>1.23333335</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationX" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="sync_y" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>-1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationY" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                          <ExtentX>0.2</ExtentX>
                          <ExtentY>0.2</ExtentY>
                          <LocationX>1.23333335</LocationX>
                          <LocationY>-1</LocationY>
                          <ColorR>0</ColorR>
                          <ColorG>0</ColorG>
                          <ColorB>0</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="10" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="10" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="10" Label="Source3" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source4" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedViewport.bonsai" />
                  <Expression xsi:type="PublishSubject">
                    <Name>DrawSyncSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="22" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="19" Label="Source1" />
                  <Edge From="8" To="11" Label="Source2" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source3" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="19" Label="Source2" />
                  <Edge From="15" To="17" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source3" />
                  <Edge From="19" To="21" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DrawGratings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VisualSpan</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Max" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0</dsp:Min>
                      <dsp:Max>110.01596088640814</dsp:Max>
                      <dsp:RangeMin>0</dsp:RangeMin>
                      <dsp:RangeMax>1</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Radius" />
                      <Property Name="Aperture" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimFreq</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SpatialFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VisualSpan</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" />
                      <Property Name="ExtentY" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimLocationX</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimContrast</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>ContrastZero</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="LessThanOrEqual">
                          <Operand xsi:type="FloatProperty">
                            <Value>0.01</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>ContrastExist</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="FloatProperty">
                            <Value>0.01</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Opacity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>35</LocationX>
                    <LocationY>0</LocationY>
                    <Angle>0</Angle>
                    <SpatialFrequency>0.1</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>0.0625</Contrast>
                    <Radius>0.445389926</Radius>
                    <Aperture>0.445389926</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>110.015961</ExtentX>
                    <ExtentY>110.015961</ExtentY>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="20" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="20" Label="Source4" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="20" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="20" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="20" Label="Source5" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="12" To="16" Label="Source1" />
                  <Edge From="13" To="20" Label="Source6" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="18" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source7" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Defer">
                <Name>Spacer</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\Spacer.bonsai">
                      <TermDelay>PT4S</TermDelay>
                      <InitDelay>PT4S</InitDelay>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SelectMany">
                <Name>SpontaneousActivity0</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="DueTime" />
                    </Expression>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>SyncState</Name>
                    </Expression>
                    <Expression xsi:type="SelectMany">
                      <Name>Timer</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="DueTime" DisplayName="DueTime" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="gl:Timer">
                              <gl:DueTime>PT2S</gl:DueTime>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>SyncState</Name>
                    </Expression>
                    <Expression xsi:type="Unit" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="4" Label="Source2" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="7" To="8" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SelectMany">
                <Name>Spacer</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\Spacer.bonsai">
                      <TermDelay>PT4S</TermDelay>
                      <InitDelay>PT4S</InitDelay>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SelectMany">
                <Name>ReceptiveFieldMappingStim</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>SyncState</Name>
                    </Expression>
                    <Expression xsi:type="Unit" />
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="FileNameRFMapStim" />
                      <Property Name="MappingTime" />
                    </Expression>
                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\ReceptiveFieldMappingStim.bonsai">
                      <MappingTime>PT2S</MappingTime>
                      <FileNameRFMapStim>NoiseLocations.bin</FileNameRFMapStim>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="gl:UpdateFrame" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Skip">
                        <rx:Count>60</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:SubscribeWhen" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:LastOrDefault" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>0</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>SyncState</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="7" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source2" />
                    <Edge From="7" To="8" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                    <Edge From="10" To="11" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SelectMany">
                <Name>Spacer</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\Spacer.bonsai">
                      <TermDelay>PT4S</TermDelay>
                      <InitDelay>PT4S</InitDelay>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>ContrastSelectivityTaskStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SyncState</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileNameGabors" />
                  </Expression>
                  <Expression xsi:type="NestedWorkflow">
                    <Name>ReplayTaskStims</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimContrast</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it % 2</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SyncState</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="FileName" DisplayName="FileNameGabors" />
                        </Expression>
                        <Expression xsi:type="io:CsvReader">
                          <io:FileName>Extensions\stims_test.csv</io:FileName>
                          <io:ListSeparator />
                          <io:ScanPattern>%i %f %f</io:ScanPattern>
                          <io:SkipRows>0</io:SkipRows>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BpodEvent</Name>
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Name>StartDelay</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="FloatProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StimContrast</Name>
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Name>StartStim</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="FloatProperty">
                                  <Value>2</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item1</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StimLocationX</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item2</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StimContrast</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item3</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StimPhase</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>LastStim</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0.3</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SelectMany">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT0S</gl:DueTime>
                                  <gl:Period>PT0.3S</gl:Period>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="12" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="7" To="11" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="11" To="21" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="12" To="15" Label="Source1" />
                        <Edge From="12" To="17" Label="Source1" />
                        <Edge From="12" To="19" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="FileNameTrialInfo" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="FileNameEvents" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="FileNamePositions" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="NestedWorkflow">
                <Name>SaveData</Name>
                <Description>Needs a Published Subject with the RE data stream
Saves Rotary Encoder events, positions and trial info from pybpod
Optionally saves ultrasonic microphone data.

3/4 different files, as per ALF specification:
_iblrig_encoderEvents.raw.ssv
_iblrig_encoderPositions.raw.ssv
_iblrig_encoderTrialInfo.raw.ssv
Optional:
_iblrig_micData.raw.wav
</Description>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>StimAngle</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Gain</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>TrialNum</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>InitPosition</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Contrast</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>StimFreq</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>StimSize</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>StimPhase</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timestamp" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="FileName" DisplayName="FileNameTrialInfo" />
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-07-01\008\raw_behavior_data\_iblrig_encoderTrialInfo.raw.ssv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>true</io:Overwrite>
                      <io:Suffix>None</io:Suffix>
                      <io:IncludeHeader>false</io:IncludeHeader>
                      <io:CompatibilityMode>true</io:CompatibilityMode>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>RawEncoderEvents</Name>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="FileName" DisplayName="FileNameEvents" />
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-07-01\008\raw_behavior_data\_iblrig_encoderEvents.raw.ssv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>true</io:Overwrite>
                      <io:Suffix>None</io:Suffix>
                      <io:IncludeHeader>false</io:IncludeHeader>
                      <io:CompatibilityMode>true</io:CompatibilityMode>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>RawEncoderPositions</Name>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="FileName" DisplayName="FileNamePositions" />
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-07-01\008\raw_behavior_data\_iblrig_encoderPositions.raw.ssv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>true</io:Overwrite>
                      <io:Suffix>None</io:Suffix>
                      <io:IncludeHeader>false</io:IncludeHeader>
                      <io:CompatibilityMode>true</io:CompatibilityMode>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="7" Label="Source5" />
                    <Edge From="1" To="7" Label="Source6" />
                    <Edge From="2" To="7" Label="Source1" />
                    <Edge From="3" To="7" Label="Source2" />
                    <Edge From="4" To="7" Label="Source3" />
                    <Edge From="5" To="7" Label="Source4" />
                    <Edge From="6" To="7" Label="Source7" />
                    <Edge From="7" To="9" Label="Source1" />
                    <Edge From="8" To="9" Label="Source2" />
                    <Edge From="9" To="10" Label="Source1" />
                    <Edge From="10" To="12" Label="Source1" />
                    <Edge From="11" To="12" Label="Source2" />
                    <Edge From="13" To="15" Label="Source1" />
                    <Edge From="14" To="15" Label="Source2" />
                    <Edge From="16" To="18" Label="Source1" />
                    <Edge From="17" To="18" Label="Source2" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:WindowClosed" />
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Connection>bpod</osc:Connection>
              <osc:Address>/x</osc:Address>
              <osc:TypeTag>i</osc:TypeTag>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:SampleOnUpdateFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="REPortName" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>RotaryEncoder</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" DisplayName="REPortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:Encoder">
                      <q2:PortName>COM7</q2:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:EncoderEvent" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp,Data</Selector>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>RawEncoderEvents</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>single(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:SampleOnUpdateFrame" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BpodEvent</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="q2:EncoderPosition" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Timestamp,Position</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="BehaviorSubject">
                      <Name>RawEncoderPositions</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Item2</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="dsp:Rescale">
                        <dsp:Min>-512</dsp:Min>
                        <dsp:Max>512</dsp:Max>
                        <dsp:RangeMin>-180</dsp:RangeMin>
                        <dsp:RangeMax>180</dsp:RangeMax>
                        <dsp:RescaleType>Linear</dsp:RescaleType>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="gl:SampleOnUpdateFrame" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="BehaviorSubject">
                      <Name>Encoder</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="IntProperty">
                        <Value>1</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:Accumulate" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="9" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="15" Label="Source2" />
            <Edge From="14" To="15" Label="Source3" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>