<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateWindow">
          <q1:Width>640</q1:Width>
          <q1:Height>480</q1:Height>
          <q1:VSync>On</q1:VSync>
          <q1:SwapSync>false</q1:SwapSync>
          <q1:ClearColor>Gray</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:CursorVisible>true</q1:CursorVisible>
          <q1:Location xsi:nil="true" />
          <q1:WindowBorder>Resizable</q1:WindowBorder>
          <q1:WindowState>Fullscreen</q1:WindowState>
          <q1:DisplayDevice>Second</q1:DisplayDevice>
          <q1:TargetRenderFrequency>0</q1:TargetRenderFrequency>
          <q1:RenderState />
          <q1:GraphicsMode>
            <q1:ColorFormat>
              <q1:Red>8</q1:Red>
              <q1:Green>8</q1:Green>
              <q1:Blue>8</q1:Blue>
              <q1:Alpha>8</q1:Alpha>
            </q1:ColorFormat>
            <q1:Depth>16</q1:Depth>
            <q1:Stencil>0</q1:Stencil>
            <q1:Samples>0</q1:Samples>
            <q1:AccumulatorFormat>
              <q1:Red>0</q1:Red>
              <q1:Green>0</q1:Green>
              <q1:Blue>0</q1:Blue>
              <q1:Alpha>0</q1:Alpha>
            </q1:AccumulatorFormat>
            <q1:Buffers>2</q1:Buffers>
            <q1:Stereo>false</q1:Stereo>
          </q1:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedViewport.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GaborXLoc</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GaborContrast</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Contrast" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>-0.0930232555</LocationX>
        <LocationY>0</LocationY>
        <Angle>0</Angle>
        <SpatialFrequency>10</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <SquareWave>false</SquareWave>
        <Contrast>0.5</Contrast>
        <Radius>1</Radius>
        <Aperture>0.290697664</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SyncSquare</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GaborXLoc</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GaborContrast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Accumulate" />
            <Expression xsi:type="q2:ExpressionTransform">
              <q2:Expression>it % 2</q2:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.2</ExtentX>
              <ExtentY>0.2</ExtentY>
              <LocationX>1.333</LocationX>
              <LocationY>-0.9</LocationY>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborXLoc</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborContrast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>49</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GaborSigma</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="q3:CsvReader">
        <q3:FileName>stims.csv</q3:FileName>
        <q3:ListSeparator />
        <q3:ScanPattern>%i %f</q3:ScanPattern>
        <q3:SkipRows>0</q3:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT0S</DueTime>
          <Period>PT1S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item1</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>GaborXLoc</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeLast">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item2</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>GaborContrast</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="11" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source3" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="20" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="22" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvReader, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeLast, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateWindow, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.LoadResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>