<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q1="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="BehaviorSubject">
        <Name>Red</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>calib_osc</q1:Connection>
        <q1:Address>/d</q1:Address>
        <q1:TypeTag>i</q1:TypeTag>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:AspectRatio" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Range</Name>
        <Description>Generates NumSteps floats from MivValue to MaxValue</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timer">
                <DueTime>PT0S</DueTime>
                <Period>PT0.15S</Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>1.01</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfSingleGreaterThanBuilder">
                    <MemberName>Value</MemberName>
                    <Name>MaxValue</Name>
                    <Value>1.01</Value>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfSingleGreaterThanBuilder">
              <MemberName>MaxValue</MemberName>
              <Name>MaxValue</Name>
              <Value>1.01</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfSingleFloatProperty">
              <MemberName>Value</MemberName>
              <Name>MinValue</Name>
              <Value>0</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfSingleFloatProperty">
              <MemberName>Value</MemberName>
              <Name>NumSteps</Name>
              <Value>100</Value>
            </Expression>
            <Expression xsi:type="ExternalizedTimeSpanOfTimer">
              <MemberName>Period</MemberName>
              <Name>Period</Name>
              <Value>PT0.15S</Value>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:UpdateUniform">
          <q2:UniformName>aspectRatio</q2:UniformName>
          <q2:ShaderName>sweep</q2:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:RenderFrame" />
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>calib_osc</q1:Connection>
        <q1:Address>/i</q1:Address>
        <q1:TypeTag>i</q1:TypeTag>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DrawMesh">
          <q2:ShaderName>sweep</q2:ShaderName>
          <q2:MeshName>FullScreenQuad</q2:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Green</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Green</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Blue</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Red</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Blue</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>UpdateUniforms</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>Red</q2:UniformName>
                <q2:ShaderName>sweep</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Red</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>Green</q2:UniformName>
                <q2:ShaderName>sweep</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>Blue</q2:UniformName>
                <q2:ShaderName>sweep</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Green</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Blue</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="FloatProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>17</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>17</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>17</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>18</To>
        <Label>Source2</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.AspectRatio, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DivideBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedTimeSpan`1[[Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>