<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns:q2="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q4="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="BehaviorSubject">
        <Name>Red</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="q1:ReceiveMessage">
        <q1:Connection>from_python</q1:Connection>
        <q1:Address>/d</q1:Address>
        <q1:TypeTag>i</q1:TypeTag>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:AspectRatio" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Range</Name>
        <Description>Generates NumSteps floats from MivValue to MaxValue</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timer">
                <DueTime>PT0S</DueTime>
                <Period>PT0.2S</Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>1.1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedPropertyOfSingleGreaterThanBuilder">
                    <MemberName>Value</MemberName>
                    <Name>MaxValue</Name>
                    <Value>1.1</Value>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source2</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfSingleGreaterThanBuilder">
              <MemberName>MaxValue</MemberName>
              <Name>MaxValue</Name>
              <Value>1.1</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfSingleFloatProperty">
              <MemberName>Value</MemberName>
              <Name>MinValue</Name>
              <Value>0</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfSingleFloatProperty">
              <MemberName>Value</MemberName>
              <Name>NumSteps</Name>
              <Value>100</Value>
            </Expression>
            <Expression xsi:type="ExternalizedTimeSpanOfTimer">
              <MemberName>Period</MemberName>
              <Name>Period</Name>
              <Value>PT0.2S</Value>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:UpdateUniform">
          <q2:UniformName>aspectRatio</q2:UniformName>
          <q2:ShaderName>sweep</q2:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:RenderFrame" />
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileName</MemberName>
        <Name>FileName</Name>
        <Value>_iblrig_calibration_screen_brightness.raw.ssv</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DrawMesh">
          <q2:ShaderName>sweep</q2:ShaderName>
          <q2:MeshName>FullScreenQuad</q2:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Green</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Green</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Blue</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Red</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Blue</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>UpdateUniforms</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>Red</q2:UniformName>
                <q2:ShaderName>sweep</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Red</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>Green</q2:UniformName>
                <q2:ShaderName>sweep</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>Blue</q2:UniformName>
                <q2:ShaderName>sweep</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Green</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Blue</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>R in RGB?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RGB</Name>
                  </Expression>
                  <Expression xsi:type="q3:PythonTransform">
                    <q3:Script>@returns(bool)
def process(value):
  return 'R' in value</q3:Script>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>G in RGB?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RGB</Name>
                  </Expression>
                  <Expression xsi:type="q3:PythonTransform">
                    <q3:Script>@returns(bool)
def process(value):
  return 'G' in value</q3:Script>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>B in RGB?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RGB</Name>
                  </Expression>
                  <Expression xsi:type="q3:PythonTransform">
                    <q3:Script>@returns(bool)
def process(value):
  return 'B' in value</q3:Script>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>2</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>1</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Data</Name>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>SaveData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
              <MemberName>FileName</MemberName>
              <Name>FileName</Name>
              <Value>_iblrig_calibration_screen_brightness.raw.ssv</Value>
            </Expression>
            <Expression xsi:type="q4:CsvWriter">
              <q4:FileName>_iblrig_calibration_screen_brightness.raw.ssv</q4:FileName>
              <q4:Append>false</q4:Append>
              <q4:Overwrite>true</q4:Overwrite>
              <q4:Suffix>None</q4:Suffix>
              <q4:IncludeHeader>false</q4:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Operand>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfBooleanBooleanProperty">
              <MemberName>Value</MemberName>
              <Name>Save</Name>
              <Value>true</Value>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>GreaterThanOrEqualTo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>1.0001</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedPropertyOfSingleGreaterThanOrEqualBuilder">
              <MemberName>Value</MemberName>
              <Name>Value</Name>
              <Value>1.0001</Value>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>0</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>RGB</Name>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfBooleanBooleanProperty">
        <MemberName>Save</MemberName>
        <Name>Save</Name>
        <Value>true</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>RGB</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringStringProperty">
        <MemberName>Value</MemberName>
        <Name>RGB</Name>
        <Value>RGB</Value>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Condition">
        <Name>G in RGB?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RGB</Name>
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(bool)
def process(value):
  return 'G' in value</q3:Script>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>B in RGB?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RGB</Name>
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(bool)
def process(value):
  return 'B' in value</q3:Script>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Red</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>R in RGB?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RGB</Name>
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(bool)
def process(value):
  return 'R' in value</q3:Script>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Green</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Blue</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>30</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>27</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>20</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>18</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>28</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>17</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>30</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>31</From>
        <To>17</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>17</To>
        <Label>Source4</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.AspectRatio, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DivideBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedTimeSpan`1[[Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.18.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Boolean, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanOrEqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.GreaterThanOrEqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>