<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q4="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns:q6="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q1:Device">
            <q1:PortName>COM8</q1:PortName>
            <q1:DeviceState>Active</q1:DeviceState>
            <q1:DumpRegisters>true</q1:DumpRegisters>
            <q1:LedState>On</q1:LedState>
            <q1:VisualIndicators>On</q1:VisualIndicators>
            <q1:Heartbeat>Disable</q1:Heartbeat>
            <q1:IgnoreErrors>false</q1:IgnoreErrors>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="q2:BehaviorEvent">
          <q2:Type>AnalogInput</q2:Type>
          <q2:Mask>Port0</q2:Mask>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Red</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Green</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Blue</Name>
      </Expression>
      <Expression xsi:type="PropertySourceOfFloatPropertySingle">
        <MemberName>MaxValue</MemberName>
        <Value>1.3</Value>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="MaxValue" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\range.bonsai">
        <MaxValue>1.3</MaxValue>
        <MinValue>0</MinValue>
        <NumSteps>100</NumSteps>
        <Period>PT0.02S</Period>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>R in RGB?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RGB</Name>
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(bool)
def process(value):
  return 'R' in value</q3:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Red</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>G in RGB?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RGB</Name>
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(bool)
def process(value):
  return 'G' in value</q3:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Green</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>B in RGB?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RGB</Name>
            </Expression>
            <Expression xsi:type="q3:PythonTransform">
              <q3:Script>@returns(bool)
def process(value):
  return 'B' in value</q3:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Blue</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>GreaterThanOrEqualTo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>1.3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="q4:ReceiveMessage">
          <q4:Connection>from_python</q4:Connection>
          <q4:Address>/d</q4:Address>
          <q4:TypeTag>i</q4:TypeTag>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>Data</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="TakeUntil" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:AspectRatio" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:UpdateUniform">
          <q5:UniformName>aspectRatio</q5:UniformName>
          <q5:ShaderName>sweep</q5:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:DrawMesh">
          <q5:ShaderName>sweep</q5:ShaderName>
          <q5:MeshName>FullScreenQuad</q5:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>UpdateUniforms</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Red</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:UpdateUniform">
                <q5:UniformName>Red</q5:UniformName>
                <q5:ShaderName>sweep</q5:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Green</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:UpdateUniform">
                <q5:UniformName>Green</q5:UniformName>
                <q5:ShaderName>sweep</q5:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Blue</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:UpdateUniform">
                <q5:UniformName>Blue</q5:UniformName>
                <q5:ShaderName>sweep</q5:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="FileName" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="Save" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="NestedWorkflow">
          <Name>SaveData</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>Data</Name>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="FileName" />
              </Expression>
              <Expression xsi:type="q6:CsvWriter">
                <q6:FileName>_iblrig_calibration_screen_blue.raw.ssv</q6:FileName>
                <q6:Append>false</q6:Append>
                <q6:Overwrite>true</q6:Overwrite>
                <q6:Suffix>None</q6:Suffix>
                <q6:IncludeHeader>false</q6:IncludeHeader>
                <q6:CompatibilityMode>true</q6:CompatibilityMode>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="Save" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Equal">
                      <Operand xsi:type="BooleanProperty">
                        <Value>true</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="SubscribeWhen" />
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="2" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="6" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source2" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>RGB</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>RGB</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeRGBVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Red</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Green</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Blue</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="18" Label="Source1" />
      <Edge From="2" To="18" Label="Source3" />
      <Edge From="3" To="18" Label="Source4" />
      <Edge From="4" To="18" Label="Source5" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="14" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="7" To="15" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="20" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="26" To="28" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanOrEqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MulticastSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.PropertySource`2[[Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null],[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Harp.CF.BehaviorEvent, Bonsai.Harp.CF, Version=1.5.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Harp.Device, Bonsai.Harp, Version=3.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.AspectRatio, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>